PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Delay discount task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $" GBP " + str(reward_today) + " today " + " or " + " GBP " + str(future_reward) + " after " + str(delay) + " days "
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = OneDrive/Dokumen/PsychoPy experiments/Delay Discounting task/Delay_cond_file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 63, 'future_reward': 90, 'delay': 129},
      {'reward_today': 17, 'future_reward': 38, 'delay': 32},
      {'reward_today': 24, 'future_reward': 37, 'delay': 45},
      {'reward_today': 56, 'future_reward': 76, 'delay': 98},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 87, 'future_reward': 101, 'delay': 185},
      {'reward_today': 39, 'future_reward': 64, 'delay': 67},
      {'reward_today': 92, 'future_reward': 116, 'delay': 206},
      {'reward_today': 13, 'future_reward': 37, 'delay': 19},
      {'reward_today': 41, 'future_reward': 67, 'delay': 72},
      {'reward_today': 43, 'future_reward': 59, 'delay': 74},
      {'reward_today': 66, 'future_reward': 97, 'delay': 138},
      {'reward_today': 22, 'future_reward': 41, 'delay': 40},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 20, 'future_reward': 44, 'delay': 37},
      {'reward_today': 33, 'future_reward': 56, 'delay': 59},
      {'reward_today': 52, 'future_reward': 70, 'delay': 91},
      {'reward_today': 31, 'future_reward': 54, 'delay': 57},
      {'reward_today': 19, 'future_reward': 33, 'delay': 35},
      {'reward_today': 60, 'future_reward': 82, 'delay': 112},
      {'reward_today': 50, 'future_reward': 75, 'delay': 86},
      {'reward_today': 46, 'future_reward': 61, 'delay': 77},
      {'reward_today': 29, 'future_reward': 57, 'delay': 54},
      {'reward_today': 71, 'future_reward': 99, 'delay': 148},
      {'reward_today': 47, 'future_reward': 74, 'delay': 79},
      {'reward_today': 28, 'future_reward': 49, 'delay': 52},
      {'reward_today': 35, 'future_reward': 54, 'delay': 64}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
    Routine trial
  LoopTerminator trials
