PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SOLO_FINAL
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $prime_words
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test_routine
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $prime_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = prime_words_solo.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime_words': 'doctor - nurse'},
      {'prime_words': 'rain - umbrella'},
      {'prime_words': 'bread - butter'},
      {'prime_words': 'cat - dog'},
      {'prime_words': 'car - truck'},
      {'prime_words': 'shoe-  sock'},
      {'prime_words': 'fire - hot'},
      {'prime_words': 'pencil - paper'},
      {'prime_words': 'king- queen'},
      {'prime_words': 'lock - key'},
      {'prime_words': 'moon - night'},
      {'prime_words': 'fish - water'},
      {'prime_words': 'ball - bat'},
      {'prime_words': 'flower - garden'},
      {'prime_words': 'coffee - tea'},
      {'prime_words': 'chair - apple'},
      {'prime_words': 'window - clock'},
      {'prime_words': 'table - shoe'},
      {'prime_words': 'phone - tree'},
      {'prime_words': 'grass - book'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words_solo.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime_word': 'doctor', 'target_word': 'nurse', 'related_flag': 'related'},
      {'prime_word': 'rain', 'target_word': 'umbrella', 'related_flag': 'related'},
      {'prime_word': 'bread', 'target_word': 'butter', 'related_flag': 'related'},
      {'prime_word': 'cat', 'target_word': 'dog', 'related_flag': 'related'},
      {'prime_word': 'car', 'target_word': 'truck', 'related_flag': 'related'},
      {'prime_word': 'shoe', 'target_word': 'sock', 'related_flag': 'related'},
      {'prime_word': 'fire', 'target_word': 'hot', 'related_flag': 'related'},
      {'prime_word': 'pencil', 'target_word': 'paper', 'related_flag': 'related'},
      {'prime_word': 'king', 'target_word': 'queen', 'related_flag': 'related'},
      {'prime_word': 'lock', 'target_word': 'key', 'related_flag': 'related'},
      {'prime_word': 'moon', 'target_word': 'night', 'related_flag': 'related'},
      {'prime_word': 'fish', 'target_word': 'water', 'related_flag': 'related'},
      {'prime_word': 'ball', 'target_word': 'bat', 'related_flag': 'related'},
      {'prime_word': 'flower', 'target_word': 'garden', 'related_flag': 'related'},
      {'prime_word': 'coffee', 'target_word': 'tea', 'related_flag': 'related'},
      {'prime_word': 'chair', 'target_word': 'apple', 'related_flag': 'unrelated'},
      {'prime_word': 'window', 'target_word': 'clock', 'related_flag': 'unrelated'},
      {'prime_word': 'table', 'target_word': 'shoe', 'related_flag': 'unrelated'},
      {'prime_word': 'phone', 'target_word': 'tree', 'related_flag': 'unrelated'},
      {'prime_word': 'grass', 'target_word': 'book', 'related_flag': 'unrelated'}]
    Routine test_routine
  LoopTerminator trials_2
