PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Stroop experiment final
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instruction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = welcome
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = thanks 
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/condd.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'stim_condition': 'C', 'correct_res': 'r'},
      {'word': 'RED', 'colour': 'blue', 'stim_condition': 'I', 'correct_res': 'b'},
      {'word': 'BLUE', 'colour': 'red', 'stim_condition': 'I', 'correct_res': 'r'},
      {'word': 'BLUE', 'colour': 'blue', 'stim_condition': 'C', 'correct_res': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
