PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = word priming experiement
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_words
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisisble=True
  Routine test_
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 't-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'},
      {'study_word': 'board'},
      {'study_word': 'marble'},
      {'study_word': 'phone'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'table'},
      {'study_word': 'pencil'},
      {'study_word': 'vase'},
      {'study_word': 'bottle'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    Routine test_
  LoopTerminator trials_2
